OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
0xc67a01dc Audio-Visual Stimulator Emotion Recognition => #1
  Lua Script = C:/Users/Leo/Desktop/stim.lua
  Start Time = 20
  Video Clip Time = 240
  Questions Time = 40
  Rest Time = 30
  Number of Trials = 2
  First Class = OVTK_StimulationId_Label_01
  Second Class = OVTK_StimulationId_Label_02
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#1 -> Identity => #2
#2.Output stream 3 -> Run Command
  Stimulation 1 = OVTK_GDF_Start_Of_Trial
  Command 1 = start C:/Users/Leo/Desktop/leocneves-eeg_hmi-5f0ef05af578/dataset/lack.jpg
  Stimulation 2 = OVTK_StimulationId_Label_01
  Command 2 = start C:/Users/Leo/Desktop/leocneves-eeg_hmi-5f0ef05af578/dataset/happiness/1.mp4
  Stimulation 3 = OVTK_StimulationId_Label_02
  Command 3 = start C:/Users/Leo/Desktop/leocneves-eeg_hmi-5f0ef05af578/dataset/happiness/2.mp4
  Stimulation 4 = OVTK_StimulationId_NonTarget
  Command 4 = start C:/Users/Leo/Desktop/leocneves-eeg_hmi-5f0ef05af578/dataset/SAM.png
  Stimulation 5 = OVTK_StimulationId_RestStart
  Command 5 = start C:/Users/Leo/Desktop/leocneves-eeg_hmi-5f0ef05af578/dataset/lack.jpg
  Stimulation 6 = OVTK_StimulationId_ExperimentStop
  Command 6 = taskkill /im vlc.exe /f
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2, Input stream 3=#2.Output stream 3 -> Generic stream writer
  Filename = C:/Users/Leo/Desktop/seilaa
  Use compression = false
#2.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
