OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Signal stream, Input stream 2=#0.Stimulations -> Identity => #1
#1.Output stream 1 -> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #4
  Equation = log(1+x)
#1.Output stream 1 -> Univariate Statistics => #5
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
Input stream 1=#4, Input stream 2=#5.Variance -> Feature aggregator => #6
Features=#6 -> Classifier processor => #7
  Filename to load configuration from = ${Player_ScenarioDirectory}/valence-classifier-config.xml
#7.Probability values -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
